PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Identification of Neuroticism-Related Movie Scenes
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Welcome_Screen
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    TextComponent Text_information_test_scene
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will first be presented with a test scene that does not require any ratings. This is your chance to ensure that your audio and video setup is functioning properly. Please press the spacebar to continue!
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    KeyboardComponent Spacebar_end_information_test_scene_screen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Progress_update_halfway
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    TextComponent Progress_update_halfway_done
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Awesome! You're halfway done with the movie scene ratings. Please press the spacebar to continue.
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    KeyboardComponent Spacebar_end_progress_update_halfway
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Code_skipp_halfway_done
      Code Type = Auto->JS
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      Begin Experiment:
        ShowOnce = True
      Begin Routine:
        if not ShowOnce:
            continueRoutine = False
      End Routine:
        ShowOnce = False
  Routine Goodbye_screen
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    TextComponent Goodbye_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Great! You are finished with the movie scene ratings. Please press the spacebar to continue.
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    KeyboardComponent Spacebar_end_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Blank_text_05
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    TextComponent Blank_Text_500ms
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Movie_1_2
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    MovieComponent Movie_scene_1_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Movie_scenes
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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  Routine Scene_rating_questions_movie_1_2
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    SliderComponent Slider_movie_rating_response_1_2
      forceEndRoutine = False
      granularity = 1
      labels = ('Strongly \n Disagree', 'Disagree', 'Neutral', 'Agree', 'Strongly \n Agree')
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 1,2,3,4,5
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    TextboxComponent Movie_scene_rating_items_1_2
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (1.5, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Item_Movie_Rating
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    ImageComponent Button_click_to_continue_1_2
      image = ContinueButton.png
      pos = (.35,-.30)
      size = (0.4, 0.15)
      startVal [condition] = Slider_movie_rating_response_1_2.rating
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    MouseComponent Click_to_continue_mouse_1_2
      clickable = Button_click_to_continue_1_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = Slider_movie_rating_response_1_2.rating
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    CodeComponent Code_movie_1_2
      Code Type = Auto->JS
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      Begin Routine:
        Slider_movie_rating_response_1_2.reset()
      End Routine:
        thisExp.addData(f'Rating_Question_answer_{Item_Movie_Rating}', Slider_movie_rating_response_1_2.getRating())
        thisExp.addData(f'Rating_Question_rt_{Item_Movie_Rating}', Slider_movie_rating_response_1_2.getRT())
        thisExp.addData(f'Rating_Question_history_{Item_Movie_Rating}', Slider_movie_rating_response_1_2.getHistory())
  Routine Scene_rating_questions_movie_3_4
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    SliderComponent Slider_movie_rating_response_3_4
      forceEndRoutine = False
      granularity = 1
      labels = ('Strongly \n Disagree', 'Disagree', 'Neutral', 'Agree', 'Strongly \n Agree')
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 1,2,3,4,5
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    TextboxComponent Movie_scene_rating_items_3_4
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (1.5, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Item_Movie_Rating
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    ImageComponent Button_click_to_continue_3_4
      image = ContinueButton.png
      pos = (.35, -.30)
      size = (0.4, 0.2)
      startVal [condition] = Slider_movie_rating_response_3_4.rating
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    MouseComponent Click_to_continue_mouse_3_4
      clickable = Button_click_to_continue_3_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = Slider_movie_rating_response_3_4.rating
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    CodeComponent code_movie_3_4
      Code Type = Auto->JS
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      Begin Routine:
        Slider_movie_rating_response_3_4.reset()
      End Routine:
        thisExp.addData(f'Rating_Question_answer_{Item_Movie_Rating}', Slider_movie_rating_response_3_4.getRating())
        thisExp.addData(f'Rating_Question_rt_{Item_Movie_Rating}', Slider_movie_rating_response_3_4.getRT())
        thisExp.addData(f'Rating_Question_history_{Item_Movie_Rating}', Slider_movie_rating_response_3_4.getHistory())
  Routine Movie_3_4
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    MovieComponent Movie_scene_3_4
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $Movie_scenes
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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  Routine Pick_group
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    CodeComponent Code_pick_group
      Code Type = Auto->JS
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      Begin Experiment:
        group1_trials_reps = 0
        group2_trials_reps = 1
  Routine Fetch_shelf
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    CodeComponent increase_participant
      Code Type = JS
      Begin JS Routine:
        // increase the value on the shelf by 1
        psychoJS.shelf.addIntegerValue({key: ['participant_counter'], delta: 1})
        // fetch the current value on the shelf (this variable is displayed in text)
        participantN = await psychoJS.shelf.getIntegerValue({key: ['participant_counter'], defaultVlaue: 0})

        // https://www.psychopy.org/online/shelf.html#interacting-with-integer-records
    TextComponent ppt_count_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $'Hello. You are participant number ' + participantN + ' to try out this demo!'
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  Routine Test_audio_video_group_1
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    MovieComponent Test_scene_group_1
      backend = ffpyplayer
      forceEndRoutine = False
      movie = Test_scenes/Test_scene_for_group_1.mp4
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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  Routine Test_audio_video_group_2
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    MovieComponent Test_scene_group_2
      backend = ffpyplayer
      forceEndRoutine = False
      movie = Test_scenes/Test_scene_for_group_2.mp4
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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  Routine Information_start_study_group_2
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    CodeComponent Code_control_test_scene_3
      Code Type = Auto->JS
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      Begin Routine:
        replay_scene = False
        event.clearEvents(eventType = 'keyboard')
      Each Frame:
        keys = event.getKeys()

        if 'space' in keys:
            continueRoutine = False #End the current routine
            Loop_test_scene_2.finished = True #End loop

        if 'return' in keys:
            replay_scene = True
            continue_Routine = False
            Loop_test_scene_2.finished = False
      End Routine:
        if replay_scene:
            Test_scene_group_2.seek(0)
    TextComponent Text_study_starts_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This was the test scene.

        If you encountered issues with your audio or video setup, please try to resolve them now and press the Enter key to replay the test scene.

        If your audio and video setup is functioning properly, please press the spacebar to start with the movie scene ratings.
    KeyboardComponent Key_control_to_start_study_2
      allowedKeys = 'space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Information_start_study_group_1
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    CodeComponent Code_control_test_scene
      Code Type = Auto->JS
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      Begin Routine:
        replay_scene = False
        event.clearEvents(eventType = 'keyboard')
      Each Frame:
        keys = event.getKeys()

        if 'space' in keys:
            continueRoutine = False #End the current routine
            Loop_test_scene.finished = True #End loop

        if 'return' in keys:
            replay_scene = True
            continue_Routine = False
            Loop_test_scene.finished = False
      End Routine:
        if replay_scene:
            Test_scene_group_2.seek(0)
    TextComponent Text_study_starts
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This was the test scene.

        If you encountered issues with your audio or video setup, please try to resolve them now and press the Enter key to replay the test scene.

        If your audio and video setup is functioning properly, please press the spacebar to start with the movie scene ratings.
    KeyboardComponent Key_control_to_start_study
      allowedKeys = 'space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_1
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    CodeComponent increase_participant_2
      Code Type = JS
      Begin JS Routine:
        // increase the value on the shelf by 1
        psychoJS.shelf.addIntegerValue({key: ['participant_counter'], delta: 1})
        // fetch the current value on the shelf (this variable is displayed in text)
        participantN = await psychoJS.shelf.getIntegerValue({key: ['participant_counter'], defaultVlaue: 0})

        // https://www.psychopy.org/online/shelf.html#interacting-with-integer-records
    TextComponent ppt_count_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $'Hello. You are participant number ' + participantN + ' to try out this demo!'
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  Routine counterbalancing
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  CounterbalanceRoutine counterbalance
    endExperimentOnDepletion = True
    nGroups = 2
    nReps = 1
    nSlots = 2
    saveData = True
    saveRemaining = True
    specMode = uniform
  PavloviaSurveyRoutine Start_of_study_pavlovia_survey
    surveyId = 36daea59-ece7-4f0b-ba6e-34837ed4f79e
    surveyType = id
  PavloviaSurveyRoutine End_of_study_Pavlovia_survey
    surveyId = fb38f81f-1759-446a-b480-31e4a7f5fa55
    surveyType = id
Flow
  Routine Pick_group
  PavloviaSurveyRoutine Start_of_study_pavlovia_survey
  LoopInitiator Group_1_is_watching_movies_1_2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = group1_trials_reps
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    Routine Welcome_Screen
    LoopInitiator Loop_test_scene loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 100
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      Routine Test_audio_video_group_1
      Routine Information_start_study_group_1
    LoopTerminator Loop_test_scene
    LoopInitiator Iterate_different_movies_1_2 loopType="TrialHandler"
      conditionsFile = Different_movies_1_2.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Diff_movie_files_1_2': 'Movie_1_stimuli.xlsx'},
        {'Diff_movie_files_1_2': 'Movie_2_stimuli.xlsx'}]
      LoopInitiator Iterate_all_scenes_from_movie_1_2 loopType="TrialHandler"
        conditionsFile = $Diff_movie_files_1_2
        loopType = sequential
        nReps = 1
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        conditions:
          [{'Movie_scenes': 'Scenes_Movie_1_clean/scene_1.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_2.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_3.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_4.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_5.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_6.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_7.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_8.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_9.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_10.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_11.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_12.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_13.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_14.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_15.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_16.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_17.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_18.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_19.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_20.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_21.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_22.mp4'},
          {'Movie_scenes': 'Scenes_Movie_1_clean/scene_23.mp4'}]
        Routine Movie_1_2
        Routine Blank_text_05
        LoopInitiator Iterate_rating_responses_1_2 loopType="TrialHandler"
          conditionsFile = Movie_Rating_Statements.xlsx
          loopType = random
          nReps = 1
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          conditions:
            [{'Item_Movie_Rating': 'This scene made me feel tense', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'},
            {'Item_Movie_Rating': 'This scene made me feel happy', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'},
            {'Item_Movie_Rating': 'This scene made me feel frustrated', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'},
            {'Item_Movie_Rating': 'This scene made me feel safe and secure', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'},
            {'Item_Movie_Rating': 'This scene made me feel dissatisfied with myself', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'},
            {'Item_Movie_Rating': 'This scene made me feel confident in myself and my abilities', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'}]
          Routine Scene_rating_questions_movie_1_2
        LoopTerminator Iterate_rating_responses_1_2
        Routine Blank_text_05
      LoopTerminator Iterate_all_scenes_from_movie_1_2
      Routine Progress_update_halfway
    LoopTerminator Iterate_different_movies_1_2
    Routine Blank_text_05
    Routine Goodbye_screen
  LoopTerminator Group_1_is_watching_movies_1_2
  LoopInitiator Group_2_is_watching_movies_3_4 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = group2_trials_reps
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    Routine Welcome_Screen
    LoopInitiator Loop_test_scene_2 loopType="TrialHandler"
      loopType = random
      nReps = 100
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      Routine Test_audio_video_group_2
      Routine Information_start_study_group_2
    LoopTerminator Loop_test_scene_2
    LoopInitiator Iterate_different_movies_3_4 loopType="TrialHandler"
      conditionsFile = Different_movies_3_4.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Diff_movie_files_3_4': 'Movie_3_stimuli.xlsx'},
        {'Diff_movie_files_3_4': 'Movie_4_stimuli.xlsx'}]
      LoopInitiator Iterate_all_scenes_from_movie_3_4 loopType="TrialHandler"
        conditionsFile = $Diff_movie_files_3_4
        loopType = sequential
        nReps = 1
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        conditions:
          [{'Diff_movie_files_3_4': 'Movie_3_stimuli.xlsx'},
          {'Diff_movie_files_3_4': 'Movie_4_stimuli.xlsx'}]
        Routine Movie_3_4
        Routine Blank_text_05
        LoopInitiator Iterate_rating_responses_3_4 loopType="TrialHandler"
          conditionsFile = Movie_Rating_Statements.xlsx
          loopType = random
          nReps = 1
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          conditions:
            [{'Item_Movie_Rating': 'This scene made me feel tense', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'},
            {'Item_Movie_Rating': 'This scene made me feel happy', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'},
            {'Item_Movie_Rating': 'This scene made me feel frustrated', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'},
            {'Item_Movie_Rating': 'This scene made me feel safe and secure', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'},
            {'Item_Movie_Rating': 'This scene made me feel dissatisfied with myself', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'},
            {'Item_Movie_Rating': 'This scene made me feel like nothing could bring me down', 'type': 'rating', 'options': 'Strongly Disgree, Disgree, Neutral, Agree, Strongly Agree'}]
          Routine Scene_rating_questions_movie_3_4
        LoopTerminator Iterate_rating_responses_3_4
        Routine Blank_text_05
      LoopTerminator Iterate_all_scenes_from_movie_3_4
      Routine Progress_update_halfway
    LoopTerminator Iterate_different_movies_3_4
    Routine Blank_text_05
    Routine Goodbye_screen
  LoopTerminator Group_2_is_watching_movies_3_4
  PavloviaSurveyRoutine End_of_study_Pavlovia_survey
